PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': 'test', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = grouping-vwm-task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine VWM_memory_display
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    CodeComponent memory_sequence_code
      Code Type = Py
      Before Experiment:
        import random

        random.seed = 1

        max_eccen = 0.5

        def get_random_path_coord( coords_to_avoid ):
            # Select random x and y values that are different from those in coords_to_avoid
            x = coords_to_avoid[0]
            while abs(x - coords_to_avoid[0]) < 0.2:
                x = round(max_eccen * random.uniform(-1, 1), 1)
            y = coords_to_avoid[1]
            while abs(y - coords_to_avoid[1]) < 0.2:
                y = round(max_eccen * random.uniform(-1, 1), 1)
            coord = (x,y)
            return coord
      Begin Experiment:
        # Set path parameters
        path_length = 5
        pause_duration = 0.2 # 200 ms
        retention_interval = 3.0 # 1000 ms

        # Movement speed (adjust for smoothness)
        step_size = 0.01 # speeding up for debugging
        #step_size = 0.005

        # colors
        white = [1,1,1]
        gray = [0,0,0]
      Begin Routine:
        # Get locations for this trial
        path_coords = []
        ## path coords is a list of (x,y) tuples
        for segment in range(path_length):
            if segment == 0:
                segment_coord = (0,0)
            else:
                segment_coord = get_random_path_coord(path_coords[segment-1])

            path_coords.append(segment_coord)
        #print(path_coords)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords[segment]
        disc_color = white
        path_end = path_coords[segment + 1]

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)
      Each Frame:
        if pause_timer.getTime() <= 0 and segment < path_length - 1:
            path_end = path_coords[segment + 1]
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    disc_color = white
                else:
                    disc_color = gray
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                disc_color = white
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif segment >= path_length - 1 and pause_timer.getTime() <= 0:
            disc_color = gray
            continueRoutine = False  # reached last point
      End Routine:
        # pause for retention interval
        disc_color = gray
    PolygonComponent mem_disc
      fillColor [set every frame] = $disc_color
      lineColor [set every frame] = white
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mem_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine retention
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    PolygonComponent retention_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $retention_interval
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  Routine VWM_memory_probe
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    CodeComponent probe_sequence_code
      Code Type = Py
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      Begin Routine:
        # Get locations for this trial

        # by default, we reprise the prior coords
        path_coords_probe = path_coords

        print(trials.thisN)
        print(memory_type)
        print(probe_type)
        print(probe_validity)

        if probe_validity == "lure":
            if probe_type == "sequence":
                print('generating a sequence lure')
                # pick a position
                lure_pos = int(round(random.uniform(1, path_length),0))
                # swap with prior
                path_coords_probe[lure_pos] = path_coords[lure_pos - 1]
                path_coords_probe[lure_pos - 1] = path_coords[lure_pos]

            elif probe_type == "single":
                print('generating a single lure')
                # generate a lure location
                x = round(max_eccen * random.uniform(-1, 1), 1)
                y = round(max_eccen * random.uniform(-1, 1), 1)
                lure_coords = (x,y)
                a = 1
                while a:
                    # check against memory set
                    i = 0
                    for loc in path_coords:
                        x_distance = abs(loc[0] - lure_coords[0])
                        y_distance = abs(loc[1] - lure_coords[1])
                        if x_distance < 0.2 and y_distance < 0.2:
                            x = round(max_eccen * random.uniform(-1, 1), 1)
                            y = round(max_eccen * random.uniform(-1, 1), 1)
                            lure_coords = (x,y)
                            break
                        else:
                            print(loc)
                            print(x_distance)
                            print(y_distance)
                        a = 0
                path_coords_probe = [lure_coords]

        else: # probe_validity == target
            if probe_type == "single":
                print('generating a single target')
                probe_pos = int(round(random.uniform(1, path_length-1),0))
                path_coords_probe = [path_coords_probe[probe_pos]]
            else: # probe_type == "discrete"
                return

        print(path_coords)
        print(path_coords_probe)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords_probe[segment]
        print(disc_position)
        disc_color = white

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        if probe_type == "sequence":
            # set initial endpoint
            path_end = path_coords_probe[segment + 1]

        if probe_type == "sequence":
            response_string = "F same                different J"
        else:
            response_string = "F old                       new J"
      Each Frame:
        if segment >= path_length - 1:
            disc_color = gray
            continueRoutine = False  # reached last point
        elif probe_type == "sequence":
            # update path end and continue
            path_end = path_coords[segment + 1]


        if pause_timer.getTime() <= 0 and probe_type == "sequence" and segment < path_length - 1:
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    disc_color = white
                else:
                    disc_color = gray
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                disc_color = white
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif pause_timer.getTime() <= 0:
            disc_color = gray
            continueRoutine = False
    PolygonComponent probe_disc
      fillColor [set every frame] = $disc_color
      lineColor [set every frame] = blue
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent probe_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine VWM_response
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    TextComponent response_cue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ?
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    TextComponent response_instructions
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $response_string
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    KeyboardComponent key_resp_VWM
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 1
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    PolygonComponent ITI_fix
      fillColor = white
      lineColor = gray
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 5
    conditionsFile = experiment_control_files/trial-types_aln_2025-12-08.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine ITI
  LoopTerminator trials
